PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = memory
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        In this task, you will see sequences of digits.
        Your goal is to memorize the sequence and type it as accurately as possible.

        You will complete this task under two conditions:
        1. After a well-rested night.
        2. After a night with limited sleep.

        Press SPACE to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_message = ""
  Routine digit_presentation
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $digit_sequence
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 4.2
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  Routine response_routine
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    TextboxComponent response_box
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        if response_box.text.strip() == str(corrAns).strip():  # Convert corrAns to string
            feedback_message = "Correct"
        else:
            feedback_message = "Incorrect"
  Routine feedback_routine
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_message
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.corr:
            feedback_message = "Correct"
        else:
            feedback_message = "Incorrect"
  Routine thanks
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank You for Participating!!
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Flow
  Routine trial
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'condition': 'sleep_deprived', 'block_file': 'sleep_deprived.xlsx'},
      {'condition': 'well_rest', 'block_file': 'well_rest.xlsx'}]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $block_file
      loopType = sequential
      nReps = 3
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      Routine digit_presentation
      Routine response_routine
      Routine feedback_routine
    LoopTerminator trials
  LoopTerminator trials_2
  Routine thanks
